/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM1-28007.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "io": "sawRobotIO1394-PSM2-27374.xml",
            "pid": "../sawControllersPID-PSM.xml",
            "kinematic": "../psm-large-needle-driver.json"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "io": "sawRobotIO1394-MTMR-28247-foot-pedal.xml",
            "pid": "../sawControllersPID-MTMR.xml",
            "kinematic": "../mtm.json"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "io": "sawRobotIO1394-MTML-22723.xml",
            "pid": "../sawControllersPID-MTML.xml",
            "kinematic": "../mtm.json"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "master": "MTMR",
            "slave": "PSM1",
            "period": 0.005, // in seconds
            "rotation" : [[-1.0000,  0.0000,  0.0000],
                          [ 0.0000, -1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
        }
        ,
        {
            "master": "MTML",
            "slave": "PSM2",
            "period": 0.005, // in seconds
            "rotation" : [[-1.0000,  0.0000,  0.0000],
                          [ 0.0000, -1.0000,  0.0000],
                          [ 0.0000,  0.0000,  1.0000]]
        }
    ]
}
