/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "49695"
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "32204"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "29738"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "32336"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "34863"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1"
        }
        ,
        {
            "mtm": "MTML",
            "psm": "PSM2"
        }
    ]
    ,
    "ecm-teleop":
    {
        "mtm-left": "MTML",
        "mtm-right": "MTMR",
        "ecm": "ECM"
    }
}
