/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTMR-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "32336"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "34863"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "simulation": "KINEMATIC", // comment this to use actual arm
            // "io": "sawRobotIO1394-ECM-29738.xml",
            "pid": "sawControllersPID-ECM.xml",
            "kinematic": "ecm-straight.json"
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "serial": "28613"
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM3"
        }
    ]
    ,
    "ecm-teleop":
    {
        "mtm-left": "MTML",
        "mtm-right": "MTMR",
        "ecm": "ECM"
    }
}
